/***
 * 
 * MRI Intensity per nucleus tool
 * 
 * Segment the nuclei in the Hoechst or Dapi channel and measure the intensities
 * for each nucleus in the remaining channels.
 * 
 * (c) 2018, INSERM
 * 
 * written by Volker Baecker at Montpellier Ressources Imagerie (www.mri.cnrs.fr)
 * 
**/

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Intensity-Per-Nucleus-Tool";
var nucleiChannels = newArray("hoechst", "dapi");
var	_SCALE_FACTOR = 5.0;
var	_MIN_SIZE = 50;

macro "intensity per nucleus tool help [f4]" {
	run('URL...', 'url='+helpURL);
}

macro "intensity per nucleus tool help (f4) Action Tool - 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"{
	run('URL...', 'url='+helpURL);
}

macro "measure intensity per nucleus [f5]" {
	measureIntensityPerNucleus();
}

macro "measure intensity per nucleus (f5) Action Tool - C000T4b12m" {
	measureIntensityPerNucleus();
}

exit();

function measureIntensityPerNucleus() {
	path = File.directory;
	filename = File.name;
	channelNames = getChannelNames();	
	indexOfNucleiChannel = getIndexOfNucleiChannel(channelNames);
	indicesOfChannelsToBeMeasured = getIndicesOfChannelsToBeMeasured(indexOfNucleiChannel, channelNames.length);
	Stack.setChannel(indexOfNucleiChannel);
	run("Duplicate...", " ");
	selectNuclei();
	close();
	roiManager("Show All");
	
}

function selectNuclei() {
	imageID = getImageID();
	run("Scale...", "x="+(1.0/_SCALE_FACTOR)+" y="+(1.0/_SCALE_FACTOR)+" interpolation=Bilinear create title=small_tmp");
	setAutoThreshold("Huang dark");
	run("Convert to Mask");
	run("Fill Holes");
	run("Watershed");
	run("Scale...", "x="+_SCALE_FACTOR+" y="+_SCALE_FACTOR+" interpolation=Bilinear create title=big_tmp");
	setAutoThreshold("Huang");
	run("Set Measurements...", "area stack display redirect=None decimal=3");	
	run("Analyze Particles...", "size="+_MIN_SIZE+"-Infinity circularity=0.00-1.00 show=Nothing exclude clear summarize add");
	run("Clear Results");
	selectWindow("small_tmp");
	close();
	selectWindow("big_tmp");
	close();
	selectImage(imageID);
	roiManager("Show All");
}

function getChannelNames() {
	subtitle = getInfo("image.subtitle");
	parts = split(subtitle, ";");
	channelString = parts[0];
	parts = split(channelString, "-");
	channelString = parts[1];
	parts = split(channelString, ")");
	channelString = parts[0];
	parts = split(channelString, " ");
	channelString = parts[0];
	channelNames = split(channelString, "/");
	return channelNames;
}

function getIndexOfNucleiChannel(channelNames) {
	for (i = 0; i < channelNames.length; i++) {
		channelName = channelNames[i];
		channelName = toLowerCase(channelName);
		if (contains(nucleiChannels, channelName, true)) return i+1;
	}
	return -1;
}

function contains(aList, aString, ignoreCase) {
	searchString = aString;
	if (ignoreCase) searchString = toLowerCase(searchString);
	for (i = 0; i < aList.length; i++) {
		anElement = aList[i];
		if (ignoreCase) anElement = toLowerCase(anElement);
		if (anElement==aString) return true;
	}
	return false;
}

function getIndicesOfChannelsToBeMeasured(excludedChannel, nrOfChannels) {
	indices = newArray(0);
	for (i = 1; i <= nrOfChannels; i++) {
		if (i!=excludedChannel) indices = Array.concat(indices, i);
	}
	return indices;
}
