var _SIGMA = 3;
var _MIN_PROMINENCE = newArray(30, 30);
var _COLORS=newArray("red", "green");
var _STYLE=newArray("dot", "cross");
var _SIZE=newArray("medium", "medium");
var _MAX_RADIUS = 2;

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/MRI_Spot_Coloc_Tool"

macro "detect spots help (f1) Action Tool - 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" {
	 run('URL...', 'url='+helpURL);
}

macro "detect spots help [f1]" {
	 run('URL...', 'url='+helpURL);
}	

macro "detect spots (f2) Action Tool - C000T4b12d" {
	detectSpots(_MIN_PROMINENCE, _COLORS, _STYLE, _SIZE);
}

macro "detectSpots" [f2]" {
	detectSpots(_MIN_PROMINENCE, _COLORS, _STYLE, _SIZE);
}

function detectSpots(minProminence, colors, style, size) {
	Overlay.remove;
	inputImageID = getImageID();
	run("FeatureJ Laplacian", "compute smoothing="+_SIGMA);
	pointsImageID = getImageID();
	Stack.getDimensions(width, height, channels, slices, frames);
	for (t = 1; t <= frames; t++) {
		for (c = 1; c <= channels; c++) {
			selectImage(pointsImageID);
			Stack.setChannel(c);
			Stack.setFrame(t);
			run("Find Maxima...", "prominence="+minProminence[c-1] +" strict exclude light output=[Point Selection]");
			getSelectionCoordinates(xpoints, ypoints);
			selectImage(inputImageID);
			type = "point " + size[c-1] + " " + colors[c-1] + " " + style[c-1];
			makeSelection(type, xpoints, ypoints);
			Overlay.addSelection
			Overlay.setPosition(0, 0, t);
		}
	}	
	selectImage(pointsImageID);	
	close();
	run("Select None");
	linkSpots();
}

function linkSpots() {
	setBatchMode(true);
	currentID = 1;
	Stack.getDimensions(width, height, channels, slices, frames);
	inputImageID = getImageID();
	newImage("map", "16-bit", width, height, channels, slices, frames);
	map = getImageID();
	selectImage(inputImageID);
	numberOfSelections = Overlay.size;
	for (i = 0; i < numberOfSelections; i++) {
		selectImage(inputImageID);
		Overlay.activateSelection(i);
		Roi.getPosition(currentChannel, currentSlice, currentFrame);
		color = Roi.getStrokeColor;
		getSelectionCoordinates(xpoints1, ypoints1);
		run("Select None");
		selectImage(map);
		if (color=='red') {
			Stack.setChannel(1);
		} else {	
			Stack.setChannel(2);
		}
		Stack.setFrame(currentFrame);
		for (j = 0; j < xpoints1.length; j++) {
			makeRectangle(xpoints1[j]-_MAX_RADIUS, ypoints1[j]-_MAX_RADIUS, 2*_MAX_RADIUS+1, 2*_MAX_RADIUS+1);
			id = getIDFor(xpoints1[j], ypoints1[j], currentChannel, currentFrame);
			if (id==-1) id = currentID++;
			setColor(id);
			run("Fill", "slice");	
		}
	}
	run("Select None");
	Stack.setChannel(2);
	resetMinAndMax();
	Stack.setChannel(1);
	resetMinAndMax();
	Stack.setDisplayMode("composite");
	setBatchMode(false);
}

function getIDFor(x, y, currentChannel, currentFrame) {
	if (currentFrame==1) return -1;
	for(f=currentFrame-1; f>0; f--) {
		Stack.setFrame(f);
		Stack.setChannel(currentChannel);
		val = getPixel(x, y);
		if (val>0) {
			Stack.setFrame(currentFrame);
			return val;
		}
	}
	Stack.setFrame(currentFrame);
	return -1;	 
}

