var SIGMA = 7;
var THRESHOLDING_METHOD = "Intermodes";		
var CHANNELS = newArray("405", "640", "488");
var BATCH_MODE = false;

var CLASSIFIER_FOLDER = getDirectory("macros") + "/toolsets/";
var CLASSIFIER = "neurite_segmentation_3.ilp"
var OUTPUT_TYPE = "Segmentation"; //  or "Probabilities"
var INPUT_DATASET = "/exported_data";
var OUTPUT_DATASET = "/exported_data";
var AXIS_ORDER = "tzyxc";
var COMPRESSION_LEVEL = 0;
var DO_HISTO_EQ = true;

var NR_OF_CLOSE_OPERATIONS = 4;
var MIN_NEURITE_AREA = 20000;

var NAME_FILTER = "Coleno";
var NR_OF_FILES_PER_FOLDER = 10;
var SUBFOLDER = "/Mosaic_16bits/";

var LUT = "Random";
var CONNECTIVITY = 4;

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Neurite_Analyzer_Tool";
 
mergeAndFilter();
exit

macro "Neurite Analyzer Action Tool - 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" {
	run('URL...', 'url='+helpURL);	
}

macro "copy random data (f3) Action Tool - C037T1d13cT9d13rC555" {
	copyRandomData();
}

macro "batch export as h5 (f4) Action Tool - C037T1d13hT9d135C555" {
	batchConvertToH5();
}

macro "segment nuclei (f5) Action Tool - C000T4b12n" {
	segmentNuclei();
}

macro "segment neurites (f6) Action Tool - C000T4b12s" {
	segmentNeurites();	
}

macro "merge and filter (f7) Action Tool - C000T4b12m" {
	mergeAndFilter();
}

macro "label neurites (f8) Action Tool - C000T4b12l" {
   labelNeurites();  
}


function removeRoisWithoutSupport(image, otherImage) {
	selectImage(otherImage);
	run("To ROI Manager");
	run("Select None");
	roiManager("combine");
	setBatchMode(true);
	run("Create Mask");
	rename("neurite-mask");
	otherImageMaskID = getImageID();
	selectImage(otherImage);
	run("From ROI Manager");
	roiManager("reset");
	selectImage(image);
	Overlay.copy
	selectImage(otherImageMaskID);	
	Overlay.paste
	toBeRemoved = newArray(0);
	for (i = 0; i < Overlay.size; i++) {
		showProgress(i+1, Overlay.size);
		Overlay.activateSelection(i);
		v = getValue("Mean");
		if (v==0) {
			toBeRemoved = Array.concat(toBeRemoved, i);
		}
	}
	selectImage(image);	
	run("To ROI Manager");
	if (toBeRemoved.length>0) {
		roiManager("select", toBeRemoved);
		roiManager("delete");
		run("Select None");
	}
	print("Removed :"+toBeRemoved.length+" rois");
	run("From ROI Manager");
	roiManager("reset");
	selectImage(otherImageMaskID);
	close();
	setBatchMode("exit and display");
}

function mergeAndFilter() {
	imageInfo = getImageInfo();
	nucleiImageTitle = imageInfo[0];
	nucleiImageID = imageInfo[1];
	neuriteImageTitle = imageInfo[2];
	neuriteImageID = imageInfo[3];
	showStatus("Merge and filter: STARTED...");
	removeRoisWithoutSupport(nucleiImageID, neuriteImageID);
	showStatus("Merge and filter: STAND BY...");
	removeRoisWithoutSupport(neuriteImageID, nucleiImageID);
	selectImage(nucleiImageID);
	run("To ROI Manager");
	roiManager("Combine");
	run("Create Mask");
	rename("nuclei-mask");
	nucleiMaskID = getImageID();
	run("Options...", "iterations=50 count=1 do=Dilate");
	selectImage(nucleiImageID);
	run("From ROI Manager");
	roiManager("reset");
	selectImage(neuriteImageID);
	run("To ROI Manager");
	roiManager("Combine");
	run("Create Mask");
	rename("neurite-mask");
	neuriteMaskID = getImageID();
	run("Geodesic Distance Map", "marker=nuclei-mask mask=neurite-mask distances=[Chessknight (5,7,11)] output=[16 bits] normalize");
	max = getValue("Max");
	run("Macro...", "code=v=(v!="+max+")*v");
	selectImage(neuriteImageID);
	run("From ROI Manager");
	roiManager("reset");
	showStatus("Merging and filter: DONE.");
}

function labelNeurites() {
    selectImage("nuclei-mask");
    run("16-bit");
    run("Connected Components Labeling",  "connectivity="+CONNECTIVITY+" type=[16 bits]");
    getHistogram(values, counts, 255);
    max = Math.ceil(values[values.length -1]);
    nucleiLabels = getImageID();
    run("Copy");
    selectImage("neurite-mask");
    run("16-bit");
    run("Macro...", "code=[v = (v==255) * 65535]");
    setPasteMode("Transparent-zero");
    run("Paste");
    run("Neurite Labelling PlugIn");
    run(LUT);
    setMinAndMax(0, max);
}

function merge(nucleiImageTitle, neuriteImageTitle) {
	showStatus("Merging and filter: Merging.");
	options = "c3="+nucleiImageTitle+" c4="+neuriteImageTitle+" create keep";
	print(options);
	run("Merge Channels...", options);
	mergedImageID = getImageID();
	selectImage(nucleiImageID);
	run("To ROI Manager");
	count = roiManager("count");
	selectImage(mergedImageID);
	c=1;
	for (i = 0; i < count; i++) {
		roiManager("select", i);
		Overlay.addSelection;
		Overlay.setPosition(c, 1, 1);
	}
	selectImage(nucleiImageID);
	close();
	roiManager("reset");
	selectImage(neuriteImageID);
	run("To ROI Manager");
	count = roiManager("count");
	selectImage(mergedImageID);
	c=2;
	for (i = 0; i < count; i++) {
		roiManager("select", i);
		Overlay.addSelection;
		Overlay.setPosition(c, 1, 1);
	}
	run("Select None");
	selectImage(neuriteImageID);
	close();
	roiManager("reset");
}

function getImageInfo() {
	title = getTitle();    
	imageID = getImageID();
	if (indexOf(title, CHANNELS[0])>-1) {
		nucleiImageTitle = title;
		nucleiImageID = imageID;
		neuriteImageTitle = replace(nucleiImageTitle, CHANNELS[0], CHANNELS[1]);
		selectImage(neuriteImageTitle);
		neuriteImageID = getImageID();
	} 
	if (indexOf(title, CHANNELS[1])>-1) {
		neuriteImageTitle = title;
		neuriteImageID = imageID;
		nucleiImageTitle = replace(neuriteImageTitle, CHANNELS[1], CHANNELS[0]);
		selectImage(nucleiImageTitle);
		nucleiImageID = getImageID();
	}
	return newArray(nucleiImageTitle, nucleiImageID, neuriteImageTitle, neuriteImageID);
}

function batchSegmentNuclei() {
	dir = getDir("Select the input folder!");
	subfolders = getFileList(dir);
	setBatchMode(true);
	BATCH_MODE = true;
	print("\\Clear");
	for (i = 0; i < subfolders.length; i++) {
		print("Entering folder " + subfolders[i]);
		folder = dir + subfolders[i];
		files = getFileList(folder);
		files = getFilesForChannel(files, CHANNELS[0]);
		for (f = 0; f < files.length; f++) {
			file = files[f];
			print("Processing file " + file);
			open(folder + file);
			segmentNuclei();
			save(folder + file);
			close();
		}
	}
	setBatchMode("exit and display");
	BATCH_MODE = false;
}


/**
 * Run the ilastik-classifier on the active image and transform the resulting segmentation mask
 * to a roi on the input image.
 */
function segmentNeurites() {
	Overlay.remove;
	outputDataset = "exported_data";
	compressionLevel = 0;
	imageID = getImageID();
	dir = getInfo("image.directory");
	file = getInfo("image.filename");
	parts = split(file, ".");
	file = replace(file, "\."+parts[1], ".h5");
	outputPath = dir + file;
	run("Duplicate...", " ");
	if (DO_HISTO_EQ) equalize();
	exportArgs = "select=" + outputPath + " datasetname=" + outputDataset + " compressionlevel=" + compressionLevel;
	run("Export HDF5", exportArgs);
	close();
	inputImage = outputPath + INPUT_DATASET;
	importArgs = "select=" + outputPath + " datasetname=" + INPUT_DATASET + " axisorder=" + AXIS_ORDER; 	
	run("Import HDF5", importArgs);
	h5Image = getImageID();
	pixelClassificationArgs = "projectfilename=" + CLASSIFIER_FOLDER + CLASSIFIER + " saveonly=false inputimage=" + inputImage + " pixelclassificationtype=" + OUTPUT_TYPE;
	run("Run Pixel Classification Prediction", pixelClassificationArgs);
	neuriteMaskToSelection();
	segmentationImage = getImageID();
	selectImage(h5Image);
	close();
	selectImage(imageID);
	count = roiManager("count");
	if (count>0) run("From ROI Manager");
 	roiManager("reset");
}

/**
 * Segment nuclei and add the resulting roi to the overlay
 * of the channel.
 */
function segmentNuclei() {
	Overlay.remove;
	if (!BATCH_MODE) setBatchMode("hide");
	run("Duplicate...", " ");
	run("Gaussian Blur...", "sigma="+SIGMA);
	setAutoThreshold(THRESHOLDING_METHOD + " dark");
	run("Analyze Particles...", "  show=Overlay ");
	Overlay.copy;
	close();
	Overlay.paste;
	if (!BATCH_MODE) setBatchMode("show");
}

function getFilesForChannel(files, channel) {
	res = newArray(0);
	for (i = 0; i < files.length; i++) {
		file = files[i];
		if (indexOf(file, channel)>-1) {
			res = Array.concat(res, file);			
		}
	}
	return res;
}

function getH5FilesForChannel(files, channel) {
	res = newArray(0);
	for (i = 0; i < files.length; i++) {
		file = files[i];
		if (indexOf(file, channel)>-1 && endsWith(file, ".h5")) {
			res = Array.concat(res, file);			
		}
	}
	return res;
}	

function equalize() {
	run("Enhance Contrast...", "saturated=0.3 equalize");
	run("Gaussian Blur...", "sigma=1");
}

function batchEqualize() {
	dir = getDir("Select the input folder!");
	subfolders = getFileList(dir);
	setBatchMode(true);
	for (i = 0; i < subfolders.length; i++) {
		print("Entering folder " + subfolders[i]);
		showProgress(i+1, subfolders.length);
		folder = dir + subfolders[i];
		files = getFileList(folder);
		files = getFilesForChannel(files, CHANNELS[1]);
		for (f = 0; f < files.length; f++) {
			file = files[f];
			open(folder + file);
			equalize();
			save(folder + file);
			close();
		}
	}
	setBatchMode("exit and display");
}

function batchConvertToH5() {
	t1 = getTime();
	outputDataset = "exported_data";
	compressionLevel = 0;

	dir = getDir("Select the input folder!");
	subfolders = getFileList(dir);
	print("\\Clear");
	setBatchMode(true);
	for (i = 0; i < subfolders.length; i++) {
		showProgress(i+1, subfolders.length);
		print("Entering folder " + subfolders[i]);
		folder = dir + subfolders[i];
		files = getFileList(folder);
		files = getFilesForChannel(files, CHANNELS[1]);
		for (f = 0; f < files.length; f++) {
			file = files[f];
			filesString = String.join(files, ",");
			if (endsWith(file, ".h5")) continue;
			out = replace(file, "tif", "h5");
			if (indexOf(filesString, out)>-1) continue;
			print("Processing file " + file);
			open(folder + file);
			if (DO_HISTO_EQ) equalize();
			outputPath = folder + File.nameWithoutExtension + ".h5";			
			exportArgs = "select=" + outputPath + " datasetname=" + outputDataset + " compressionlevel=" + compressionLevel;
			run("Export HDF5", exportArgs);
			close("*");
			if (f%10==0) run("Collect Garbage");
		}
	}
	setBatchMode(false);
	t2 = getTime();
	print("batch convert to h5 took: " + (t2-t1)/1000 + "s");
}

// Use ilastik from command line instead
function batchSegmentNeurites() {
	dir = getDir("Select the input folder!");
	subfolders = getFileList(dir);
	setBatchMode(true);
	for (i = 0; i < subfolders.length; i++) {
		print("Entering folder " + subfolders[i]);
		showProgress(i+1, subfolders.length);
		folder = dir + subfolders[i];
		files = getFileList(folder);
		files = getH5FilesForChannel(files, CHANNELS[1]);
		for (f = 0; f < files.length; f++) {
			print("Processing file " + files[f]);
			file = folder + files[f];
			inputImage = file + INPUT_DATASET;
			importArgs = "select=" + file + " datasetname=" + INPUT_DATASET + " axisorder=" + AXIS_ORDER; 	
			run("Import HDF5", importArgs);
			pixelClassificationArgs = "projectfilename=" + CLASSIFIER_FOLDER + CLASSIFIER + " saveonly=false inputimage=" + inputImage + " pixelclassificationtype=" + OUTPUT_TYPE;
			run("Run Pixel Classification Prediction", pixelClassificationArgs);
			parts = split(file, '.');
			outputFile = parts[0] + "-" + OUTPUT_TYPE + ".h5";
			exportArgs = "select=" + outputFile + " datasetname=" + OUTPUT_DATASET + " compressionlevel=" + COMPRESSION_LEVEL;	
			run("Export HDF5", exportArgs);
			close("*");
		}
	}
	setBatchMode("exit and display");
}

function batchMaskToSelection() {
	dir = getDir("Select the input folder!");
	subfolders = getFileList(dir);
	setBatchMode(true);
	for (i = 0; i < subfolders.length; i++) {
		print("Entering folder " + subfolders[i]);
		showProgress(i+1, subfolders.length);
		folder = dir + subfolders[i];
		files = getFileList(folder);
		files = getFilesForChannel(files, CHANNELS[0]);
		for (f = 0; f < files.length; f++) {
			print("Processing file " + files[f]);
			file = folder + files[f];
			file2 = replace(file, CHANNELS[0], CHANNELS[1]);
			file3 = replace(file2, ".tif", "_segmentation.tiff");
			outFile = replace(file3, "_segmentation.tiff", "_composite.tif");
			if (File.exists(outFile)) continue;
			open(file);
			nucleiImageID = getImageID();
			nucleiImageID = getTitle();
			open(file2);
			neuriteImageID = getImageID();
			neuriteImageTitle = getTitle();
			open(file3);
			neuriteMaskToSelection();
			close();
			selectImage(nucleiImageID);
			Overlay.copy
			run("Merge Channels...", "c2="+neuriteImageTitle+" c3="+nucleiImageID+" create");
			run("Enhance Contrast", "saturated=0.35");
			Overlay.paste
			Stack.setChannel(2);
			run("From ROI Manager");
			saveAs("tiff", outFile);
			close("*");
		}
	}
	setBatchMode("exit and display");
}

function neuriteMaskToSelection() {
	roiManager("reset");
	imageID = getImageID();
	run("Invert");
	run("Invert LUT");
	run("Options...", "iterations="+NR_OF_CLOSE_OPERATIONS+" count=1 do=Close");
	run("Analyze Particles...", "size="+MIN_NEURITE_AREA+"-Infinity composite add");
	run("Select None");
	selectImage(imageID);
	close();
}

function copyRandomData() {
	dir = getDir("Select the input folder!");
	destDir = getDir("Select the target folder!");
	files = getFileList(dir);
	folders = filterFolders(files);
	Array.print(folders);
	for (i = 0; i < folders.length; i++) {
		showProgress(i+1, folders.length);
		folder = dir + folders[i] + SUBFOLDER;
		File.makeDirectory(destDir + "/" + folders[i]);
		files = getFileList(folder);
		partFiles = getPartFiles(files, CHANNELS[0]);
		Array.sort(partFiles);
		indices = Array.getSequence(partFiles.length);
		shuffle(indices);
		for (p = 0; p < CHANNELS.length; p++) {
			part = CHANNELS[p];
			if (p>0) replaceFile(partFiles, CHANNELS[p-1], CHANNELS[p]);
			for (f = 0; f < NR_OF_FILES_PER_FOLDER; f++) {
				File.copy(folder + "/" + partFiles[indices[f]], destDir + "/" + folders[i] + partFiles[indices[f]]);
			}
		}
	}
}


function replaceFile(files, part1, part2) {
	for (i = 0; i < files.length; i++) {
		files[i] = replace(files[i], part1, part2);
	}
}

function shuffle(array) {
	for (i = 0; i < array.length; i++) {
		randomIndexToSwap = randomInt(array.length);
		temp = array[randomIndexToSwap];
		array[randomIndexToSwap] = array[i];
		array[i] = temp;
	}
}

function randomInt(n) {
	rand = random;
	res = floor(n * rand);
	return res;
}

function getPartFiles(files, part) {
	res = newArray(0);
	for (i = 0; i < files.length; i++) {
		file = files[i];
		if (indexOf(file, part)>-1) {
			res = Array.concat(res, file);			
		}
	}
	return res;
}

function filterFolders(files) {
	res = newArray(0);
	for (i = 0; i < files.length; i++) {
		if (indexOf(files[i], NAME_FILTER)>-1) {
			res = Array.concat(res, files[i]);
		}
	}
	return res;
}
