/**
  *  Tools to calculate the width-profile of an object given as a binary mask. 
  *  - calculate the width profile of the objext
  *    - as local thickness
  *    - perpendicular to the axis of inertia
  *    - at regular distances using rays perpendicular to a centerline segment 
  *   
  *  (c) 2022, INSERM
  *  written  by Volker Baecker (INSERM) at Montpellier RIO Imaging (www.mri.cnrs.fr)
  * 
  **
*/



macro "Width Profile Tools Help Action Tool - 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" {
     run('URL...', 'url='+_URL);
}

macro "Local Thickness (f5) Action Tool - C000T4b12t" {
    runLocalThickness();
}

macro "Local Thickness (f5) Action Tool Options" {
    showLocalThicknessOptions();
}

macro "Local Thickness [f5]" {
    runLocalThickness();
}

function showLocalThicknessOptions() {
    call("ij.Prefs.set", "mri.options.only", "true");
    run("width profile by local thickness");
    call("ij.Prefs.set", "mri.options.only", "false");   
}

function runLocalThickness() {
    call("ij.Prefs.set", "mri.options.only", "false");   
    if (File.exists(getOptionsPath())) {
        options = loadOptions();
        run("width profile by local thickness", options);
    } else {
        run("width profile by local thickness");
    }   
}


function loadOptions() {
    optionsPath = getOptionsPath();
    optionsString = File.openAsString(optionsPath);
    optionsString = replace(optionsString, "\n", "");
    return optionsString;
}

function getOptionsPath() {
    pluginsPath = getDirectory("plugins");
    optionsPath = pluginsPath + "Width-Profile-Tools/wplt-options.txt";
    return optionsPath;
}